CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Images module is blank in the GUI since we are adding the image path in CLI.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['We do not extract metadata when performing illumination correction']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['This pipeline is meant for correction with 4 channels specifically:', '', 'DAPI', 'GFP', 'RFP', 'CY5', '']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:OrigDAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:OrigGFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "RFP")
    Name to assign these images:OrigRFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CY5")
    Name to assign these images:OrigMito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['We do not use the Groups module.']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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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notes:['Since for all seeding densities, Schwann cells do not take up a ton of space in the images, we use Background in the IC calculations.', '', 'Block size 50 seems to work best for the DAPI channel (nuclei), as well as using the Fit Polynomial smoothing method as it seemed to not over correct as compared to the other methods.', '', 'We use the each method for calculating IC functions as this seemed to produce the best results over creating one from all images in a channel.']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
    Select the input image:OrigDAPI
    Name the output image:IllumDAPI
    Select how the illumination function is calculated:Background
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    Block size:50
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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notes:['Since for all seeding densities, Schwann cells do not take up a ton of space in the images, we use Background in the IC calculations.', '', 'Block size 50 seems to work best for the GFP channel (ER), as well as using the Fit Polynomial smoothing method as it seemed to not over correct as compared to the other methods.', '', 'We use the each method for calculating IC functions as this seemed to produce the best results over creating one from all images in a channel.']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
    Select the input image:OrigGFP
    Name the output image:IllumGFP
    Select how the illumination function is calculated:Background
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    Block size:50
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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notes:['Since for all seeding densities, Schwann cells do not take up a ton of space in the images, we use Background in the IC calculations.', '', 'Block size 15 seems to work best for the RFP channel (actin), as well as using the Fit Polynomial smoothing method as it seemed to not over correct as compared to the other methods.', '', 'We use the each method for calculating IC functions as this seemed to produce the best results over creating one from all images in a channel.']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
    Select the input image:OrigRFP
    Name the output image:IllumRFP
    Select how the illumination function is calculated:Background
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    Block size:15
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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notes:['Since for all seeding densities, Schwann cells do not take up a ton of space in the images, we use Background in the IC calculations.', '', 'Block size 15 seems to work best for the CY5 channel (mitochondria), as well as using the Fit Polynomial smoothing method as it seemed to not over correct as compared to the other methods.', '', 'We use the each method for calculating IC functions as this seemed to produce the best results over creating one from all images in a channel.']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
    Select the input image:OrigMito
    Name the output image:IllumMito
    Select how the illumination function is calculated:Background
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    Block size:15
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:9|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notes:['Apply illumination correction functions to all channels']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
    Select the input image:OrigDAPI
    Name the output image:CorrDAPI
    Select the illumination function:IllumDAPI
    Select how the illumination function is applied:Subtract
    Select the input image:OrigGFP
    Name the output image:CorrGFP
    Select the illumination function:IllumGFP
    Select how the illumination function is applied:Subtract
    Select the input image:OrigRFP
    Name the output image:CorrRFP
    Select the illumination function:IllumRFP
    Select how the illumination function is applied:Subtract
    Select the input image:OrigMito
    Name the output image:CorrMito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

SaveImages:[module_num:10|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notes:['Save DAPI images as same bit-depth']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
    Select the type of image to save:Image
    Select the image to save:CorrDAPI
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigDAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illumcorrect
    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/GitHub Repos/nf1_cellpainting_data/1.cellprofiler_ic/2000_density_test_IC
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:11|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notes:['Save GFP images as same bit-depth']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
    Select the type of image to save:Image
    Select the image to save:CorrGFP
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigGFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illumcorrect
    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/GitHub Repos/nf1_cellpainting_data/1.cellprofiler_ic/2000_density_test_IC
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:12|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notes:['Save RFP images as same bit-depth']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
    Select the type of image to save:Image
    Select the image to save:CorrRFP
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigRFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illumcorrect
    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/GitHub Repos/nf1_cellpainting_data/1.cellprofiler_ic/2000_density_test_IC
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:13|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notes:['Save CY5 images as the same bit-depth']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
    Select the type of image to save:Image
    Select the image to save:CorrMito
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigMito
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illumcorrect
    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/GitHub Repos/nf1_cellpainting_data/1.cellprofiler_ic/2000_density_test_IC
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
