CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Images module is left blank since we are giving the path to the images in the CLI command']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['Metadata is extracted from the file and folder names using regular expressions.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Well>[A-Z]{1}[0-9]{1,2})_01_(?P<Channel>[1-4]{1})_(?P<Site>[0-9]{1,2})_(?P<Stain>DAPI|CY5|GFP|RFP)
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:Corrected_(?P<Plate>Plate_3_prime|Plate_3|Plate_4|Plate_5)
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['This pipeline assigns names to 4 channels specifically:', '', 'DAPI', 'GFP', 'CY5', 'RFP']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "RFP")
    Name to assign these images:RFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CY5")
    Name to assign these images:CY5
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['We do not use the Groups module.']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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['The parameters are the same as the analysis pipeline for 3 channels.']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifySecondaryObjects:[module_num:6|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notes:['The parameters are the same as the analysis pipeline for 3 channels.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:RFP
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:7|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notes:['The parameters are the same as the analysis pipeline for 3 channels.']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureColocalization:[module_num:8|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notes:['Measure whole image and within objects ']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
    Select images to measure:CY5, DAPI, GFP, RFP
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Both
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:9|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notes:['Measures within images and objects (when parameter is turned on).']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
    Select images to measure:CY5, DAPI, GFP, RFP
    Measure within objects?:Yes
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:10|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notes:['Measures intensity within objects']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
    Select images to measure:CY5, DAPI, GFP, RFP
    Select objects to measure:Cells, Cytoplasm, Nuclei

MeasureImageIntensity:[module_num:11|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notes:['Measures whole image intensity not aggregated within objects']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
    Select images to measure:CY5, DAPI, GFP, RFP
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
MeasureObjectNeighbors:[module_num:12|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notes:['Measure nuclei neighbors that are adjacent to each other.']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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:13|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notes:['Measure cell neighbors that are adjacent to each other.']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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:14|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notes:['Measure object intensity distributions witin objects using center x,y coords for each single object.', '', "We calculate Zernikes for magnitudes and phases as we are interested in seeing phase even if it doesn't help with classifying phenotypes."]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
    Select images to measure:CY5, DAPI, GFP, RFP
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:15|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notes:['Measure object size and shape.']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
    Select object sets to measure:Cells, Cytoplasm, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:16|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notes:['Measure texture within objects and the whole images.']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
    Select images to measure:CY5, DAPI, GFP, RFP
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

ExportToDatabase:[module_num:17|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notes:['Output the morphology features into an SQLite database.']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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|NF1_SchwannCell_data/CellProfiler_pipelines/Analysis_Output/Plate2_Output
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:nf1_analysis.sqlite
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:NF1_Data
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    Export object relationships?:No
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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